
{ load_file("nrngui.hoc") }
{ load_file("pointgrp.hoc") }

// Show point process group manager with SEClamp params
objref pointProcessWindow
pointProcessWindow = new PointProcessGroupManager(0)
{ object_push(pointProcessWindow) }
{
    ms = new MechanismStandard("SEClamp")
    ms.set("rs", 1, 0)
    ms.set("dur1", 10000, 0)
    ms.set("amp1", -83.7, 0)
    ms.set("dur2", 0, 0)
    ms.set("amp2", 0, 0)
    ms.set("dur3", 0, 0)
    ms.set("amp3", 0, 0)
    mnews("SEClamp", ms)
    select(0)
    execute("somaSec_ref.sec pointProcessWindow.move(0.5)")
}
{ object_pop() }
pointProcessWindow = pointProcessWindow.v1
{ pointProcessWindow.map("PointProcessGroupManager", 195, 705, 594, 300) }
